PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'timepoint': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = VAS
  keyboardBackend = ioHub
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Routines
  Routine trial
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    SliderComponent VAS_slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 25
      saveStartStop = False
      size = (1000, 30)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = 0,1000
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    TextComponent VASlabelL
      letterHeight = 25
      pos = (-500, -43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LabelL
      wrapWidth = 400
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    TextComponent VASlabelR
      letterHeight = 25
      pos = (500, -43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LabelR
      wrapWidth = 400
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    TextComponent VAStext
      letterHeight = 35
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
      wrapWidth = 1200
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    CodeComponent VAScode
      Code Type = Py
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      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)

        ##marker display options
        VAS_slider.marker.size=(1,30)
        VAS_slider.marker.color='Red'

        ##set initial mouse and marker positions
        mouse.setPos((-500,0))
        VAS_slider.markerPos=0
      Each Frame:
        ##tie marker to mouse position
        x = mouse.getPos()[0]
        VAS_slider.markerPos=500 + (x)

        #this is super lazy, it only works because the script runs line by line
        #so if each condition is not filled it passes to the next (easier to
        #fulfill) one
        if mouse.getPressed()[0]:
            thisExp.addData('rating', (VAS_slider.markerPos / 10))
            continueRoutine = False
      End Routine:
        ##take a nap to help prevent accidental double-clicks
        core.wait(0.5)
  Routine done
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    TextComponent text
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = You have completed the ratings :)
      wrapWidth = 800
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Flow
  LoopInitiator VAS_loop loopType="TrialHandler"
    conditionsFile = C:/Users/Silver/Box/psychopy_git_masters/satiety_deval/conditions/vas_ratings.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Question': 'How full do you feel right now?', 'LabelL': 'Not at all full', 'LabelR': 'Extremely full', 'Quality': 'fullness'},
      {'Question': 'How hungry do you feel right now?', 'LabelL': 'Not at all hungry', 'LabelR': 'Extremely hungry', 'Quality': 'hunger'},
      {'Question': 'How much do you want to eat the salty snack right now?', 'LabelL': 'Not at all', 'LabelR': 'Extremely', 'Quality': 'salty_wanting'},
      {'Question': 'You can now taste the salty snack you chose.\nHow much do you like it?', 'LabelL': 'Not at all', 'LabelR': 'Extremely', 'Quality': 'salty_liking'},
      {'Question': 'How much do you want to eat the sweet snack right now?', 'LabelL': 'Not at all', 'LabelR': 'Extremely', 'Quality': 'sweet_wanting'},
      {'Question': 'You can now taste the sweet snack you chose.\nHow much do you like it?', 'LabelL': 'Not at all', 'LabelR': 'Extremely', 'Quality': 'sweet_liking'}]
    Routine trial
  LoopTerminator VAS_loop
  Routine done
