PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = cm
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = sat_deval_part1
  keyboardBackend = ioHub
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Routines
  Routine choose_salt
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    TextComponent choose_salt_text
      letterHeight = 1
      pos = (0, 7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Choose your favorite salty reward:
        (use buttons '1', '2', or '3')
    TextComponent salt_1
      letterHeight = 1
      pos = (-9, -5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
      wrapWidth = 20
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    TextComponent salt_2
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
      wrapWidth = 20
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    TextComponent salt_3
      letterHeight = 1
      pos = (9, -5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
      wrapWidth = 20
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    KeyboardComponent salt_selection
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent choose_salt_code
      Code Type = Py
      Begin Experiment:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)

        #create and hide some other shit
        leftcount = 0
        rightcount = 0
        pausecount = 0
      Begin Routine:
        #no really, hide the mouse
        win.mouseVisible = False
      Each Frame:
        #set salt reward selection
        if salt_selection.keys == '1':
            salt_reward = 'images/salty_chexmix.png'
        elif salt_selection.keys == '2':
            salt_reward = 'images/salty_doritos.jpg'
        elif salt_selection.keys == '3':
            salt_reward = 'images/salty_ritz.png'
    ImageComponent chexmix
      image = images/salty_chexmix.png
      pos = (-9, 0)
      saveStartStop = False
      size = (7.5, 7.5)
      startVal [time (s)] = 0.0
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    ImageComponent doritos
      image = images/salty_doritos.jpg
      saveStartStop = False
      size = (7.5, 7.5)
      startVal [time (s)] = 0.0
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    ImageComponent ritz
      image = images/salty_ritz.png
      pos = (9, 0)
      saveStartStop = False
      size = (7.5, 7.5)
      startVal [time (s)] = 0.0
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  Routine salt_confirm
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    ImageComponent salt_confirm_image
      image [set every repeat] = $salt_reward
      saveStartStop = False
      size = (7.5, 7.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine choose_sweet
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    TextComponent choose_sweet_text
      letterHeight = 1
      pos = (0, 7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Choose your favorite sweet reward:
        (use buttons '1', '2', or '3')
    TextComponent sweet_1
      letterHeight = 1
      pos = (-9, -5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
      wrapWidth = 20
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    TextComponent sweet_2
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
      wrapWidth = 20
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    TextComponent sweet_3
      letterHeight = 1
      pos = (9, -5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
      wrapWidth = 20
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    KeyboardComponent sweet_selection
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent choose_sweet_code
      Code Type = Py
      Each Frame:
        #set sweet reward selection
        if sweet_selection.keys == '1':
            sweet_reward = 'images/sweet_minioreo.jpg'
        elif sweet_selection.keys == '2':
            sweet_reward = 'images/sweet_minipbcups.png'
        elif sweet_selection.keys == '3':
            sweet_reward = 'images/sweet_skittles.png'
    ImageComponent minioreo
      image = images/sweet_minioreo.jpg
      pos = (-9, 0)
      saveStartStop = False
      size = (7.5, 7.5)
      startVal [time (s)] = 0.0
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    ImageComponent minipbcups
      image = images/sweet_minipbcups
      saveStartStop = False
      size = (7.5, 7.5)
      startVal [time (s)] = 0.0
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    ImageComponent skittles
      image = images/sweet_skittles.png
      pos = (9, 0)
      saveStartStop = False
      size = (7.5, 7.5)
      startVal [time (s)] = 0.0
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  Routine sweet_confirm
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    ImageComponent sweet_confirm_image
      image [set every repeat] = $sweet_reward
      saveStartStop = False
      size = (7.5, 7.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine start
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    TextComponent start_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      wrapWidth = 20
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      text:
        Attention!

        The experiment begins now
  Routine fixation
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    CodeComponent jitter_code
      Code Type = Py
      Begin Routine:
        #set jitter between 1 and 2.5s
        jitter = 1 + random() * 1.5
        jitter = (round(jitter, 1))
    TextComponent asterisk
      letterHeight = 3
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = *
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  Routine choose
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    TextComponent choose_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = choose a button
      wrapWidth = 20
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine outcome
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    CodeComponent outcome_code
      Code Type = Py
      Begin Routine:
        #counterbalance left and right
        if (int(float(expInfo['participant'])) % 2) == 0:
            leftstim = salt_reward
            rightstim = sweet_reward
        else:
            leftstim = sweet_reward
            rightstim = salt_reward

        #response coding
        if key_resp.keys == 'left':
            thisExp.addData('choice', leftstim)
            if left_ref == 0:
                left_outcome.opacity = 0
                right_outcome.opacity = 0
                thisExp.addData('outcome', '0')
            elif left_ref == 1:
                right_outcome.opacity = 0
                not_win.opacity = 0
                thisExp.addData('outcome', '1')
                leftcount += 1
        elif key_resp.keys == 'right':
            thisExp.addData('choice', rightstim)
            if left_ref == 1:
                left_outcome.opacity = 0
                right_outcome.opacity = 0
                thisExp.addData('outcome', '0')
            elif left_ref == 0:
                left_outcome.opacity = 0
                not_win.opacity = 0
                thisExp.addData('outcome', '1')
                rightcount += 1
      End Routine:
        #reset opacities
        left_outcome.opacity = 1
        right_outcome.opacity = 1
        not_win.opacity = 1
    TextComponent not_win
      color = 1.0000, 0.2941, -1.0000
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = you did not win a snack
      wrapWidth = 20
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    ImageComponent left_outcome
      image [set every repeat] = $leftstim
      saveStartStop = False
      size = (7.5, 7.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent right_outcome
      image [set every repeat] = $rightstim
      saveStartStop = False
      size = (7.5, 7.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine pause
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    CodeComponent pause_code
      Code Type = Py
      Begin Routine:
        #rebind left/right to salt/sweet
        if (int(float(expInfo['participant'])) % 2) == 0:
            saltcount = leftcount
            sweetcount = rightcount
        else:
            sweetcount = leftcount
            saltcount = rightcount

        #add to pausecount
        pausecount += 1

        if pausecount < 5:
            feedback = "PAUSE" + '\n' + '\n' + 'Reward so far:' + '\n' + str(sweetcount) + " sweet" + '\n' + str(saltcount) + " salty"
        else:
            feedback = "End of experiment!" + '\n' + '\n' + 'Total reward:' + '\n' + str(sweetcount) + " sweet" + '\n' + str(saltcount) + " salty"
    TextComponent pause_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $feedback
      wrapWidth = 20
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Flow
  Routine choose_salt
  Routine salt_confirm
  Routine choose_sweet
  Routine sweet_confirm
  Routine start
  LoopInitiator trials_block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions/trials_part1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'left_ref': 0},
        {'left_ref': 0},
        {'left_ref': 0},
        {'left_ref': 0},
        {'left_ref': 0},
        {'left_ref': 0},
        {'left_ref': 0},
        {'left_ref': 0},
        {'left_ref': 1},
        {'left_ref': 1},
        {'left_ref': 1},
        {'left_ref': 1},
        {'left_ref': 1},
        {'left_ref': 1},
        {'left_ref': 1},
        {'left_ref': 1}]
      Routine fixation
      Routine choose
      Routine outcome
    LoopTerminator trials
    Routine pause
  LoopTerminator trials_block
